PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = vSearchTesting
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Routines
  Routine fixation1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instruction1
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment blah blah
        Space to continue
    KeyboardComponent keyResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thanks
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  Routine trial1
    TextComponent trialFix1
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent l11
      image = L11.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent l12
      image = L12.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent l21
      image = L21.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent l22
      image = L22.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent t11
      image = T11.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent t12
      image = T12.png
      pos [set every repeat] = [loc11,12]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent tT
      image = TT.png
      pos [set every repeat] = [loc13,loc14]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent trialResp1
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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Flow
  Routine instruction1
  Routine fixation1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = vSearchTesting1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', 0.4), ('loc2', 0.0), ('loc3', -0.2), ('loc4', 0.2), ('loc5', 0.0), ('loc6', 0.0), ('loc7', -0.4), ('loc8', -0.2), ('loc9', 0.4), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.2), ('loc13', None), ('loc14', None), ('corrAns', None)]),
      OrderedDict([('loc1', 0.4), ('loc2', -0.2), ('loc3', 0.4), ('loc4', 0.0), ('loc5', 0.2), ('loc6', 0.2), ('loc7', None), ('loc8', None), ('loc9', 0.0), ('loc10', 0.0), ('loc11', -0.2), ('loc12', 0.2), ('loc13', 0.4), ('loc14', 0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', 0.0), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', -0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', 0.2), ('loc10', 0.2), ('loc11', None), ('loc12', None), ('loc13', 0.2), ('loc14', -0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', -0.2), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', 0.0), ('loc6', 0.2), ('loc7', 0.0), ('loc8', 0.2), ('loc9', -0.4), ('loc10', -0.2), ('loc11', 0.0), ('loc12', 0.0), ('loc13', None), ('loc14', None), ('corrAns', None)]),
      OrderedDict([('loc1', 0.4), ('loc2', -0.2), ('loc3', None), ('loc4', None), ('loc5', -0.4), ('loc6', 0.0), ('loc7', 0.4), ('loc8', 0.2), ('loc9', 0.0), ('loc10', 0.2), ('loc11', 0.2), ('loc12', -0.2), ('loc13', 0.0), ('loc14', 0.0), ('corrAns', 'space')])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
    Routine trial1
  LoopTerminator trials1
  Routine end
